CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Time>.*)
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ID>.*).png
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does containregexp "[0,2,4,6,8]$")
    Name to assign these images:PrevWormOverlap
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    Select the image type:Binary mask
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    Select the rule criteria:and (directory does containregexp "[1,3,5,7,9]$")
    Name to assign these images:NextWormOverlap
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:ID

MeasureImageOverlap:[module_num:5|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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:PrevWormOverlap
    Select the image to be used to test for overlap:NextWormOverlap
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

ExportToSpreadsheet:[module_num:6|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\g<ID>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Overlap_TrueNegRate_NextWormOverlap,Image|Overlap_Recall_NextWormOverlap,Image|Overlap_TruePosRate_NextWormOverlap,Image|Overlap_Precision_NextWormOverlap,Image|Overlap_RandIndex_NextWormOverlap,Image|Overlap_FalseNegRate_NextWormOverlap,Image|Overlap_Ffactor_NextWormOverlap,Image|Overlap_AdjustedRandIndex_NextWormOverlap,Image|Overlap_FalsePosRate_NextWormOverlap
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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